# hmodel.ode

# Two-variable Hodgkin-Huxley model with m=minf and n=1

# From "Determining the Contributions of Divisive and Subtractive Feedback in the
# Hodgkin-Huxley Model", Sengul, Clewley, Bertram, Tabak. J. Comput. Neurosci.,
# 37:403-415, 2014.


# Initial conditions
init v=-65, h=0.596


# System parameters
params iapp=65, cm=1
params gnabar=120, gkbar=3.6, gl=0.3
params vna=50, vk=-77, vl=-54.4, n0=1

# Alpha and beta functions
am   = 0.1*(v+40)/( 1 - exp(-(v+40)/10) )
bm   = 4*exp(-(v+65)/18)
m    = am/(am+bm)
taum = 1/(am+bm)

ah   = 0.07*exp(-(v+65)/20)
bh   = 1/( 1 + exp(-(v+30)/10) )
hinf = ah/(ah+bh)
tauh = 1/(ah+bh)

# Ionic currents
ina = gnabar * m^3 * h * (v-vna)
il  = gl * (v-vl)
ik  = gkbar * (v-vk) * (n0)^4

# Differential equations
v' =  ( iapp - ina - il - ik) / cm
h' =  (hinf - h)/tauh


@ maxstor=12000
@ total=50, dt=0.01, bounds=10000
@ method=Runge-Kutta, toler=0.0000001, dtmin=0.000001, dtmax=1
@ xlo=0, xhi=30, ylo=-80, yhi=40
# AUTO stuff
@ Nmax=500, NPr=200, ParMin=-50, ParMax=300
@ AutoXMin=-5, AutoXMax=190
@ AutoYMin=-80, AutoYMax=35
done
